PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s_%s' %(expInfo['evaluateur'], expInfo['patient'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'age': u'', u'session': u'001', u'patient': u'', u'evaluateur': u''}
  Save wide csv file = False
  expName = denomination
  logging level = error
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine consigne
    TextComponent txt_cons1
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.11
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      text:
        Vous allez voir des images.

        Dites à voix haute ce que représente chaque image.

        Répondez le plus vite possible.

        Si votre réponse n'est pas celle attendue, la solution s'affichera.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fin
    TextComponent txt_fin
      wrapWidth = 1.5
      color = black
      text = Merci, cet exercice est terminé.
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine correction
    ImageComponent img2
      stopVal [duration (s)] = 3*(1 - touche_rep.corr)
      durationEstim = 2
      startEstim = 0
      startVal [time (s)] = 0
      image [set every repeat] = $image
      size = [1, 1]
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    TextComponent text
      opacity [set every repeat] = (1 - touche_rep.corr)
      color = black
      text [set every repeat] = $nom_item
      stopVal [duration (s)] = 3*(1 - touche_rep.corr)
      durationEstim = 2
      pos = [0, -0.6]
      startEstim = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine annonce_ex
    TextComponent txt_ann_ex
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        Etes-vous prêt ?
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine titre
    TextComponent txt_titre
      color = black
      text = DIAPORAMA
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine evaluation
    ImageComponent img
      startVal [time (s)] = 0.0
      image [set every repeat] = $image
      size = [1, 1]
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    KeyboardComponent touche_rep
      correctAns = o
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'o', 'n', 'a'
      startVal [time (s)] = 0.0
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Flow
  Routine titre
  Routine consigne
  Routine annonce_ex
  LoopInitiator exercice4 loopType="TrialHandler"
    conditionsFile = ordre_aleatoire.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'place': 0.961040578483268, u'image': u'fleche_supermom.jpg', u'nom_item': u'fl\xe8ches', u'rang': 58},
      {u'place': 0.45299092123145035, u'image': u'balance_flickr.jpg', u'nom_item': u'balance', u'rang': 13},
      {u'place': 0.30342558216770765, u'image': u'aigle_supermom.jpg', u'nom_item': u'aigle', u'rang': 2},
      {u'place': 0.9586862003750173, u'image': u'ciseaux_supermom.jpg', u'nom_item': u'ciseaux', u'rang': 41},
      {u'place': 0.6133433380774808, u'image': u'chapiteau_pixabay.jpg', u'nom_item': u'chapiteau', u'rang': 36},
      {u'place': 0.8520763242439133, u'image': u'chapeau_wikimedia.jpg', u'nom_item': u'chapeau', u'rang': 35},
      {u'place': 0.868013285939566, u'image': u'cloche_wikimedia.jpg', u'nom_item': u'cloche', u'rang': 44},
      {u'place': 0.592644833918256, u'image': u'riz_wikimedia.jpg', u'nom_item': u'riz', u'rang': 116},
      {u'place': 0.991430672109744, u'image': u'salade_supermom.jpg', u'nom_item': u'salade', u'rang': 120},
      {u'place': 0.8795591567570124, u'image': u'livre1_supermom.jpg', u'nom_item': u'livre', u'rang': 76},
      {u'place': 0.41588513266462657, u'image': u'Aubergine_wikipedia.jpg', u'nom_item': u'aubergine', u'rang': 10},
      {u'place': 0.030127420396434235, u'image': u'manege_wikimedia.jpg', u'nom_item': u'man\xe8ge', u'rang': 78},
      {u'place': 0.5421707364968709, u'image': u'ampoule_supermom.jpg', u'nom_item': u'ampoule', u'rang': 4},
      {u'place': 0.622299717603344, u'image': u'poele_flickr.jpg', u'nom_item': u'po\xeble', u'rang': 105}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
    Routine evaluation
    Routine correction
  LoopTerminator exercice4
  Routine fin
