PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s_%s' %(expInfo['evaluateur'], expInfo['patient'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'age': u'', u'session': u'001', u'patient': u'', u'evaluateur': u''}
  Save wide csv file = False
  expName = elision_phonemique
  logging level = error
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine consigne
    TextComponent txt_cons1
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        Vous allez voir une image qui représente un mot, et une lettre qui représente un son.

        Quand vous enlevez le son au mot, que reste-t-il ?

        Prononcez ce qu'il reste, même si ça ne veut rien dire.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine evaluation
    ImageComponent img_complet
      pos = [-0.55, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $complet
      size = [0.8, 0.8]
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    KeyboardComponent touche_rep
      correctAns = 'o'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'o', 'n', 'a'
      startVal [time (s)] = 0.0
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    TextComponent txt_elision
      color = black
      text [set every repeat] = $elision
      pos = [0.2, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent minus
      color = black
      text = -
      pos = [-0.05, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent equal
      color = black
      text = =  ?
      pos = [0.6, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine debut
    TextComponent txt_debut
      color = black
      text = Début de l'évaluation
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine solution
    TextComponent txt_sol
      wrapWidth = 1.5
      color = black
      text [set every repeat] = $solution
      pos = [0, -0.2]
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent img_1
      pos = [-0.3, 0.25]
      startVal [time (s)] = 0.0
      image [set every repeat] = $complet
      size = [0.4, 0.54]
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    TextComponent txt_el_sol
      color = black
      text [set every repeat] = $elision
      pos = [0.2, 0.25]
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    TextComponent minus2
      color = black
      text = -
      pos = [0, 0.25]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine annonce_ex
    TextComponent txt_ann_ex
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        Vous allez d'abord vous entrainer.

        Etes-vous prêt ?
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine annonce_exercice
    TextComponent txt_exer
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        L'exercice va commencer.

        Donnez votre réponse à voix haute, le plus rapidement possible.

        Etes-vous prêt ?
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine titre
    TextComponent txt_titre
      color = black
      text = EXERCICE 2
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine fin
    TextComponent txt_fin
      wrapWidth = 1.5
      color = black
      text = Merci, ce deuxième exercice est terminé.
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine titre
  Routine consigne
  Routine annonce_ex
  LoopInitiator exemples_el_phon loopType="TrialHandler"
    conditionsFile = elision_phonemique.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 0,1,2
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    conditions:
      [{u'type': u'exemple', u'elision': u'A', u'solution': u'ananas - A = nanass', u'complet': u'ananas_supermom.jpg'},
      {u'type': u'exemple', u'elision': u'BRO', u'solution': u'brocoli - BRO = coli', u'complet': u'brocoli1_supermom.jpg'},
      {u'type': u'entrainement', u'elision': u'PHO', u'solution': u't\xe9l\xe9phone - PHO = t\xe9fone', u'complet': u'telephone_wikimedia.jpg'},
      {u'type': u'entrainement', u'elision': u'PI', u'solution': u'chapiteau - PI = chato', u'complet': u'chapiteau_pixabay.jpg'},
      {u'type': u'entrainement', u'elision': u'SON', u'solution': u'h\xe9risson - SON = \xe9ri', u'complet': u'herisson1_supermom.jpg'},
      {u'type': u'initiale', u'elision': u'LON', u'solution': u'pantalon - LON = panta', u'complet': u'pantalon_flickr.jpg'},
      {u'type': u'initiale', u'elision': u'A', u'solution': u'ananas - A = nanass', u'complet': u'ananas_supermom.jpg'},
      {u'type': u'initiale', u'elision': u'BRO', u'solution': u'brocoli - BRO = coli', u'complet': u'brocoli1_supermom.jpg'},
      {u'type': u'initiale', u'elision': u'PHO', u'solution': u't\xe9l\xe9phone - PHO = t\xe9fone', u'complet': u'telephone_wikimedia.jpg'},
      {u'type': u'initiale', u'elision': u'PI', u'solution': u'chapiteau - PI = chato', u'complet': u'chapiteau_pixabay.jpg'},
      {u'type': u'mediane', u'elision': u'SON', u'solution': u'h\xe9risson - SON = \xe9ri', u'complet': u'herisson1_supermom.jpg'},
      {u'type': u'mediane', u'elision': u'LON', u'solution': u'pantalon - LON = panta', u'complet': u'pantalon_flickr.jpg'}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
    Routine evaluation
    Routine solution
  LoopTerminator exemples_el_phon
  LoopInitiator exe_phon loopType="TrialHandler"
    conditionsFile = elision_phonemique.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 3,4
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    conditions:
      [{u'type': u'exemple', u'elision': u'A', u'solution': u'ananas - A = nanass', u'complet': u'ananas_supermom.jpg'},
      {u'type': u'exemple', u'elision': u'BRO', u'solution': u'brocoli - BRO = coli', u'complet': u'brocoli1_supermom.jpg'},
      {u'type': u'entrainement', u'elision': u'PHO', u'solution': u't\xe9l\xe9phone - PHO = t\xe9fone', u'complet': u'telephone_wikimedia.jpg'},
      {u'type': u'entrainement', u'elision': u'PI', u'solution': u'chapiteau - PI = chato', u'complet': u'chapiteau_pixabay.jpg'},
      {u'type': u'entrainement', u'elision': u'SON', u'solution': u'h\xe9risson - SON = \xe9ri', u'complet': u'herisson1_supermom.jpg'},
      {u'type': u'initiale', u'elision': u'LON', u'solution': u'pantalon - LON = panta', u'complet': u'pantalon_flickr.jpg'},
      {u'type': u'initiale', u'elision': u'A', u'solution': u'ananas - A = nanass', u'complet': u'ananas_supermom.jpg'},
      {u'type': u'initiale', u'elision': u'BRO', u'solution': u'brocoli - BRO = coli', u'complet': u'brocoli1_supermom.jpg'},
      {u'type': u'initiale', u'elision': u'PHO', u'solution': u't\xe9l\xe9phone - PHO = t\xe9fone', u'complet': u'telephone_wikimedia.jpg'},
      {u'type': u'initiale', u'elision': u'PI', u'solution': u'chapiteau - PI = chato', u'complet': u'chapiteau_pixabay.jpg'},
      {u'type': u'mediane', u'elision': u'SON', u'solution': u'h\xe9risson - SON = \xe9ri', u'complet': u'herisson1_supermom.jpg'},
      {u'type': u'mediane', u'elision': u'LON', u'solution': u'pantalon - LON = panta', u'complet': u'pantalon_flickr.jpg'}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
    Routine evaluation
  LoopTerminator exe_phon
  Routine annonce_exercice
  LoopInitiator elisions_phon loopType="TrialHandler"
    conditionsFile = elision_phonemique.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = 5:20
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    conditions:
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    Routine evaluation
  LoopTerminator elisions_phon
  Routine fin
