PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s_%s' %(expInfo['evaluateur'], expInfo['patient'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'age': u'', u'session': u'001', u'patient': u'', u'evaluateur': u''}
  Save wide csv file = False
  expName = elision_syllabique
  logging level = error
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine consigne
    TextComponent txt_cons1
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.11
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      text:
        Vous allez voir deux images qui représentent chacune un mot.

        Quand vous enlevez le deuxième mot au premier mot, que reste-t-il ?

        Prononcez ce qu'il reste, même si ça ne veut rien dire.

        Vous allez d'abord vous entraîner.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine evaluation
    ImageComponent img_complet
      pos = [-0.6, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $complet
      size = [0.75, 1]
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    KeyboardComponent touche_rep
      correctAns = 'o'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'o', 'n', 'a'
      startVal [time (s)] = 0.0
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    ImageComponent img_elision
      pos = [0.3, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $elision
      size = [0.75, 1]
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    TextComponent minus
      color = black
      text = -
      pos = [-0.15, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent equal
      color = black
      text = =  ?
      pos = [0.85, 0]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine debut
    TextComponent txt_debut
      color = black
      text = Début de l'évaluation
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine solution
    TextComponent txt_sol
      wrapWidth = 1.5
      color = black
      text [set every repeat] = $solution
      pos = [0, -0.25]
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent img_1
      pos = [-0.3, 0.25]
      startVal [time (s)] = 0.0
      image [set every repeat] = $complet
      size = [0.4, 0.54]
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    ImageComponent img_2
      pos = [0.3, 0.25]
      startVal [time (s)] = 0.0
      image [set every repeat] = $elision
      size = [0.4, 0.54]
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    TextComponent minus2
      color = black
      text = -
      pos = [0, 0.25]
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine annonce_ex
    TextComponent txt_ann_ex
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        Etes-vous prêt ?
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine annonce_exercice
    TextComponent txt_exer
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        L'exercice va commencer.

        Donnez votre réponse à voix haute, le plus rapidement possible.

        Etes-vous prêt ?
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine titre
    TextComponent txt_titre
      color = black
      text = EXERCICE 1
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine fin
    TextComponent txt_fin
      wrapWidth = 1.5
      color = black
      text = Merci, ce premier exercice est terminé.
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine titre
  Routine consigne
  Routine annonce_ex
  LoopInitiator exemples_el_syll loopType="TrialHandler"
    conditionsFile = elision_syllabique.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 0,1,2
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    conditions:
      [{u'etape': u'exemple 1', u'elision': u'as_supermom.jpg', u'type_exercice': u'exemple', u'solution': u'ananas - as = anane', u'complet': u'ananas_supermom.jpg'},
      {u'etape': u'exemple 2', u'elision': u'lit_supermom.jpg', u'type_exercice': u'exemple', u'solution': u'brocoli - lit = broco', u'complet': u'brocoli1_supermom.jpg'},
      {u'etape': u'entrainement 1', u'elision': u'the_flickr(M).jpg', u'type_exercice': u'entra\xeenement', u'solution': u't\xe9l\xe9phone - th\xe9 = l\xe9fone', u'complet': u'telephone_wikimedia.jpg'},
      {u'etape': u'entrainement 2', u'elision': u'chat_supermom.jpg', u'type_exercice': u'entra\xeenement', u'solution': u'chapiteau - chat = pito', u'complet': u'chapiteau_pixabay.jpg'},
      {u'etape': u'entrainement 3', u'elision': u'riz_wikimedia.jpg', u'type_exercice': u'entra\xeenement', u'solution': u'h\xe9risson - riz = risson', u'complet': u'herisson1_supermom.jpg'},
      {u'etape': u'\xe9valuation 1', u'elision': u'paon_supermom.jpg', u'type_exercice': u'initiale', u'solution': u'pantalon - paon = talon', u'complet': u'pantalon_flickr.jpg'},
      {u'etape': u'\xe9valuation 2', u'elision': u'roue_pixabay.jpg', u'type_exercice': u'initiale', u'solution': u'kangourou - roue = kangou', u'complet': u'kangourou_supermom.jpg'},
      {u'etape': u'\xe9valuation 3', u'elision': u'as_supermom.jpg', u'type_exercice': u'initiale', u'solution': u'ananas - as = anane', u'complet': u'ananas_supermom.jpg'}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
    Routine evaluation
    Routine solution
  LoopTerminator exemples_el_syll
  LoopInitiator entrainements loopType="TrialHandler"
    conditionsFile = elision_syllabique.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 3,4
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    conditions:
      [{u'etape': u'exemple 1', u'elision': u'as_supermom.jpg', u'type_exercice': u'exemple', u'solution': u'ananas - as = anane', u'complet': u'ananas_supermom.jpg'},
      {u'etape': u'exemple 2', u'elision': u'lit_supermom.jpg', u'type_exercice': u'exemple', u'solution': u'brocoli - lit = broco', u'complet': u'brocoli1_supermom.jpg'},
      {u'etape': u'entrainement 1', u'elision': u'the_flickr(M).jpg', u'type_exercice': u'entra\xeenement', u'solution': u't\xe9l\xe9phone - th\xe9 = l\xe9fone', u'complet': u'telephone_wikimedia.jpg'},
      {u'etape': u'entrainement 2', u'elision': u'chat_supermom.jpg', u'type_exercice': u'entra\xeenement', u'solution': u'chapiteau - chat = pito', u'complet': u'chapiteau_pixabay.jpg'},
      {u'etape': u'entrainement 3', u'elision': u'riz_wikimedia.jpg', u'type_exercice': u'entra\xeenement', u'solution': u'h\xe9risson - riz = risson', u'complet': u'herisson1_supermom.jpg'},
      {u'etape': u'\xe9valuation 1', u'elision': u'paon_supermom.jpg', u'type_exercice': u'initiale', u'solution': u'pantalon - paon = talon', u'complet': u'pantalon_flickr.jpg'},
      {u'etape': u'\xe9valuation 2', u'elision': u'roue_pixabay.jpg', u'type_exercice': u'initiale', u'solution': u'kangourou - roue = kangou', u'complet': u'kangourou_supermom.jpg'},
      {u'etape': u'\xe9valuation 3', u'elision': u'as_supermom.jpg', u'type_exercice': u'initiale', u'solution': u'ananas - as = anane', u'complet': u'ananas_supermom.jpg'}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
    Routine evaluation
  LoopTerminator entrainements
  Routine annonce_exercice
  LoopInitiator elisions_syll loopType="TrialHandler"
    conditionsFile = elision_syllabique.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = 5:21
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    conditions:
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    Routine evaluation
  LoopTerminator elisions_syll
  Routine fin
