PsychoPy2experiment version="1.82.01"
Settings
  Show mouse = True
  Data filename = 'data/%s_%s_%s_%s' %(expInfo['evaluateur'], expInfo['patient'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1440, 900]
  Full-screen window = True
  Experiment info = {u'age': u'', u'session': u'001', u'patient': u'', u'evaluateur': u''}
  Save wide csv file = False
  expName = recherche_intrus2
  logging level = error
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine consigne
    TextComponent txt_cons1
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        Vous allez voir quatre images, qui représentent chacune un mot.

        Cherchez l'intrus.

        C'est le mot qui ne commence pas, ou ne se termine pas comme les trois autres.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine fin
    TextComponent txt_fin
      wrapWidth = 1.5
      color = black
      text = Merci, ce troisième exercice est terminé.
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine debut
    TextComponent txt_debut
      color = black
      text = Début de l'évaluation
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine solution
    ImageComponent solbd
      opacity [set every repeat] = bd_sol/2 - 0.5
      pos = [0.3, -0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $bd
      size [set every repeat] = [0.25*bd_sol, 0.25*bd_sol]
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    ImageComponent solbg
      opacity [set every repeat] = bg_sol/2 - 0.5
      pos = [-0.3, -0.2]
      startVal [time (s)] = 0.0
      image [set every repeat] = $bg
      size [set every repeat] = [0.25*bg_sol, 0.25*bg_sol]
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    ImageComponent solhd
      opacity [set every repeat] = hd_sol/2 - 0.5
      pos = [0.3, 0.4]
      startVal [time (s)] = 0.0
      image [set every repeat] = $hd
      size [set every repeat] = [0.25*hd_sol, 0.25*hd_sol]
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    ImageComponent solhg
      opacity [set every repeat] = hg_sol/2 - 0.5
      pos = [-0.3, 0.4]
      startVal [time (s)] = 0.0
      image [set every repeat] = $hg
      size [set every repeat] = [0.25*hg_sol, 0.25*hg_sol]
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    TextComponent txt_sol
      wrapWidth = 1.5
      color = black
      text = Solution :
      pos = [0, 0.9]
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent txt_expl
      wrapWidth = 1.5
      color = black
      text [set every repeat] = $explication
      pos = [0, -0.75]
      startVal [time (s)] = 0.0
      letterHeight = 0.12
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  Routine annonce_ex
    TextComponent txt_ann_ex
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        Vous allez d'abord vous entrainer.

        Etes-vous prêt ?
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine annonce_exercice
    TextComponent txt_exer
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.125
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      text:
        L'exercice va commencer.

        Donnez votre réponse à voix haute, le plus rapidement possible.

        Etes-vous prêt ?
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine titre
    TextComponent txt_titre
      color = black
      text = EXERCICE 3
      startVal [time (s)] = 0.0
      letterHeight = 0.25
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'right'
      startVal [time (s)] = 0.0
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  Routine evaluation
    KeyboardComponent touche_rep
      correctAns = 'o'
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'o', 'n', 'a'
      startVal [time (s)] = 0.0
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    ImageComponent img_hg
      pos = [-0.4, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $hg
      size = [0.75, 0.75]
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    ImageComponent img_hd
      pos = [0.4, 0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $hd
      size = [0.75, 0.75]
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    ImageComponent img_bg
      pos = [-0.4, -0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $bg
      size = [0.75, 0.75]
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    ImageComponent img_bd
      pos = [0.4, -0.5]
      startVal [time (s)] = 0.0
      image [set every repeat] = $bd
      size = [0.75, 0.75]
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Flow
  Routine titre
  Routine consigne
  Routine annonce_ex
  LoopInitiator exemples_intrus loopType="TrialHandler"
    conditionsFile = recherche_intrus.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 0,1,2
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    conditions:
      [{u'etape': u'exemple 1', u'bd': u'escargot_supermom.jpg', u'bg': u'megot_supermom.jpg', u'bg_sol': 2, u'hd_sol': 2, u'explication': u'L\'intrus est "gris" : le seul qui ne se termine pas par le son "GO".', u'type_exercice': u'syllabique finale', u'hg_sol': 3, u'hg': u'gris_LM.jpg', u'hd': u'lingot_pixabay.jpg', u'bd_sol': 2},
      {u'etape': u'exemple 2', u'bd': u'chandelier_wikimedia.jpg', u'bg': u'champignons_supermom.jpg', u'bg_sol': 2, u'hd_sol': 3, u'explication': u'L\'intrus est "chou-fleur" : le seul qui ne commence pas par le son "CHAN".', u'type_exercice': u'syllabique initiale', u'hg_sol': 2, u'hg': u'champagne_wikimedia.jpg', u'hd': u'choufleur_supermom.jpg', u'bd_sol': 2},
      {u'etape': u'exemple 3', u'bd': u'cles_pixabay.jpg', u'bg': u'sac_supermom.jpg', u'bg_sol': 3, u'hd_sol': 2, u'explication': u'L\'intrus est "sac" : le seul qui ne commence pas par le son "K".', u'type_exercice': u'phonemique initiale', u'hg_sol': 2, u'hg': u'camionbenne1_supermom.jpg', u'hd': u'kangourou_supermom.jpg', u'bd_sol': 2},
      {u'etape': u'entrainement 1', u'bd': u'haricots_wikimedia.jpg', u'bg': u'brocoli1_supermom.jpg', u'bg_sol': 2, u'hd_sol': 2, u'explication': u'L\'intrus est "haricots" : le seul qui ne se termine pas par le son "i".', u'type_exercice': u'phonemique finale', u'hg_sol': 2, u'hg': u'fourmi_pixabay.jpg', u'hd': u'tapis_supermom.jpg', u'bd_sol': 3}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
    Routine evaluation
    Routine solution
  LoopTerminator exemples_intrus
  LoopInitiator exercices loopType="TrialHandler"
    conditionsFile = recherche_intrus.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    Selected rows = 3,4
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    conditions:
      [{u'etape': u'exemple 1', u'bd': u'escargot_supermom.jpg', u'bg': u'megot_supermom.jpg', u'bg_sol': 2, u'hd_sol': 2, u'explication': u'L\'intrus est "gris" : le seul qui ne se termine pas par le son "GO".', u'type_exercice': u'syllabique finale', u'hg_sol': 3, u'hg': u'gris_LM.jpg', u'hd': u'lingot_pixabay.jpg', u'bd_sol': 2},
      {u'etape': u'exemple 2', u'bd': u'chandelier_wikimedia.jpg', u'bg': u'champignons_supermom.jpg', u'bg_sol': 2, u'hd_sol': 3, u'explication': u'L\'intrus est "chou-fleur" : le seul qui ne commence pas par le son "CHAN".', u'type_exercice': u'syllabique initiale', u'hg_sol': 2, u'hg': u'champagne_wikimedia.jpg', u'hd': u'choufleur_supermom.jpg', u'bd_sol': 2},
      {u'etape': u'exemple 3', u'bd': u'cles_pixabay.jpg', u'bg': u'sac_supermom.jpg', u'bg_sol': 3, u'hd_sol': 2, u'explication': u'L\'intrus est "sac" : le seul qui ne commence pas par le son "K".', u'type_exercice': u'phonemique initiale', u'hg_sol': 2, u'hg': u'camionbenne1_supermom.jpg', u'hd': u'kangourou_supermom.jpg', u'bd_sol': 2},
      {u'etape': u'entrainement 1', u'bd': u'haricots_wikimedia.jpg', u'bg': u'brocoli1_supermom.jpg', u'bg_sol': 2, u'hd_sol': 2, u'explication': u'L\'intrus est "haricots" : le seul qui ne se termine pas par le son "i".', u'type_exercice': u'phonemique finale', u'hg_sol': 2, u'hg': u'fourmi_pixabay.jpg', u'hd': u'tapis_supermom.jpg', u'bd_sol': 3}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
    Routine evaluation
  LoopTerminator exercices
  Routine annonce_exercice
  LoopInitiator recherches loopType="TrialHandler"
    conditionsFile = recherche_intrus.xlsx
    loopType = sequential
    nReps = 1
    Selected rows = 5:25
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    conditions:
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    Routine evaluation
  LoopTerminator recherches
  Routine fin
